PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = StroopTask_Final_v2
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent wordstim
      color [set every repeat] = $inkColor
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys [set every repeat] = ['r','g','b']
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.10
      storeCorrect = True
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  Routine cue
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    TextComponent cueText
      color [set every repeat] = white
      letterHeight = 0.10
      opacity [set every repeat] = 1 if cue == 'cue' else 0 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $cueText
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  Routine fixation
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    TextComponent fixCross
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine instructions
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    TextComponent instrtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome to the experiment!

        In each trial, you will see a colored word.
        Your task is to press the key that matches the ink color, not the word meaning.

        Press SPACE to begin when you’re ready.
    KeyboardComponent keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endRoutine
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    TextComponent thanksText
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        Press any key to exit.
    KeyboardComponent endResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breakScreen
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    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice over!
        Take a short break if you need to.
        Press SPACE to begin the main task.
    KeyboardComponent breakKey
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
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    TextComponent fixCross2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine cue_2
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    TextComponent cueText2
      color [set every repeat] = white
      letterHeight = 0.05
      opacity [set every repeat] = 1 if cue == 'cue' else 0 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $cueText
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  Routine trial2
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    TextComponent wordstim2
      color [set every repeat] = $inkColor
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    KeyboardComponent resp2
      allowedKeys [set every repeat] = ['r','g','b']
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.10
      storeCorrect = True
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Flow
  Routine instructions
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = Trials CSV/practice_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'RED'), ('inkColor', 'green'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'g')]),
      OrderedDict([('word', 'GREEN'), ('inkColor', 'green'), ('congruency', 'C'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'g')]),
      OrderedDict([('word', 'GREEN'), ('inkColor', 'red'), ('congruency', 'IC'), ('cue', 'cue'), ('cueText', 'RED'), ('correctAns', 'r')]),
      OrderedDict([('word', 'BLUE'), ('inkColor', 'blue'), ('congruency', 'C'), ('cue', 'cue'), ('cueText', 'BLUE'), ('correctAns', 'b')]),
      OrderedDict([('word', 'BLUE'), ('inkColor', 'blue'), ('congruency', 'C'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'b')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'green'), ('congruency', 'IC'), ('cue', 'cue'), ('cueText', 'GREEN'), ('correctAns', 'g')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'blue'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'b')]),
      OrderedDict([('word', 'GREEN'), ('inkColor', 'red'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'r')]),
      OrderedDict([('word', 'GREEN'), ('inkColor', 'green'), ('congruency', 'C'), ('cue', 'cue'), ('cueText', 'GREEN'), ('correctAns', 'g')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'red'), ('congruency', 'C'), ('cue', 'cue'), ('cueText', 'RED'), ('correctAns', 'r')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'red'), ('congruency', 'C'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'r')])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
    Routine fixation
    Routine cue
    Routine trial
  LoopTerminator practiceLoop
  Routine breakScreen
  LoopInitiator mainLoop loopType="TrialHandler"
    conditionsFile = Trials CSV/main_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'RED'), ('inkColor', 'blue'), ('congruency', 'IC'), ('cue', 'cue'), ('cueText', 'BLUE'), ('correctAns', 'b')]),
      OrderedDict([('word', 'BLUE'), ('inkColor', 'green'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'g')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'green'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'g')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'red'), ('congruency', 'C'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'r')]),
      OrderedDict([('word', 'GREEN'), ('inkColor', 'green'), ('congruency', 'C'), ('cue', 'cue'), ('cueText', 'GREEN'), ('correctAns', 'g')]),
      OrderedDict([('word', 'GREEN'), ('inkColor', 'red'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'r')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'red'), ('congruency', 'C'), ('cue', 'cue'), ('cueText', 'RED'), ('correctAns', 'r')]),
      OrderedDict([('word', 'BLUE'), ('inkColor', 'blue'), ('congruency', 'C'), ('cue', 'cue'), ('cueText', 'BLUE'), ('correctAns', 'b')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'red'), ('congruency', 'C'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'r')]),
      OrderedDict([('word', 'RED'), ('inkColor', 'green'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'g')]),
      OrderedDict([('word', 'BLUE'), ('inkColor', 'green'), ('congruency', 'IC'), ('cue', 'nocue'), ('cueText', None), ('correctAns', 'g')])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
    Routine fixation_2
    Routine cue_2
    Routine trial2
  LoopTerminator mainLoop
  Routine endRoutine
